
;

Set_Pipeline_Parameter_To_Folder_Path
/PARAMETER_NAME=FOLDER
/PARAMETER_VALUE=D:\Pesquisa\Parkinson\Gait\C3Dfiles\
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;

!Set the Pipeline parameter according to the analyzed subject
Set_Pipeline_Parameter
/PARAMETER_NAME=subjIDX
/PARAMETER_VALUE=SUB05_off
;

Create_Hybrid_Model
/CALIBRATION_FILE=::FOLDER&::subjIDX&_static_1.c3d
! /RANGE=ALL_FRAMES
;

Apply_Model_Template
/MODEL_TEMPLATE=::FOLDER&Parkinson.mdh
/CALIBRATION_FILE=::FOLDER&::subjIDX&_static_1.c3d
;

Set_Subject_Mass
/CALIBRATION_FILE=::FOLDER&::subjIDX&_static_1.c3d
/WEIGHT=68.9
/UNITS=kg
;

Set_Subject_Height
/CALIBRATION_FILE=::FOLDER&::subjIDX&_static_1.c3d
/HEIGHT=1.69
;

! Update the model
Build_Model
/CALIBRATION_FILE=::FOLDER&::subjIDX&_static_1.c3d
! /REBUILD_ALL_MODELS=FALSE
;

File_Open
 /FILE_NAME=::FOLDER&Trimmed_&::subjIDX&_walk_*.c3d
;

Assign_Model_File
/CALIBRATION_FILE=::FOLDER&::subjIDX&_static_1.c3d
/MOTION_FILE_NAMES=::FOLDER&Trimmed_&::subjIDX&_walk_*.c3d
! /REMOVE_EXISTING_ASSIGNMENTS=FALSE
;

Set_Pipeline_Parameter_To_List_Of_Tagged_Files
/PARAMETER_NAME=FILES
/TAG_NAME=ALL_FILES
! /GET_CURRENT_SELECTED_FILES=false
/USE_SHORT_FILENAMES=TRUE
;

Interpolate
/SIGNAL_TYPES=TARGET
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! /SIGNAL_FOLDER=ORIGINAL
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! /RESULT_FOLDER=PROCESSED
/MAXIMUM_GAP=20
! /NUM_FIT=3
! /POLYNOMIAL_ORDER=3
;

Lowpass_Filter
/SIGNAL_TYPES=ANALOG
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/SIGNAL_FOLDER=ORIGINAL
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/RESULT_FOLDER=PROCESSED
! /FILTER_CLASS=BUTTERWORTH
/FREQUENCY_CUTOFF=10
! /NUM_REFLECTED=0
! /TOTAL_BUFFER_SIZE=0
! /NUM_BIDIRECTIONAL_PASSES=1
;

Set_Force_Platform_Threshold
/THRESHOLD=20
! /SET_AS_DEFAULT=FALSE
;

Set_Use_Processed_Analog
/USE_PROCESSED=TRUE
;

Lowpass_Filter
/SIGNAL_TYPES=TARGET
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/SIGNAL_FOLDER=PROCESSED
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/FREQUENCY_CUTOFF=10
! /NUM_REFLECTED=6
! /TOTAL_BUFFER_SIZE=6
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;

Recalc
;

! Calculate Angular Kinematics

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
! /USE_CARDAN_SEQUENCE=FALSE
! /NORMALIZATION=FALSE
! /NORMALIZATION_METHOD=FALSE
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! /NEGATEX=FALSE
! /NEGATEY=FALSE
! /NEGATEZ=FALSE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
! /TREADMILL_DATA=FALSE
! /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
! /TREADMILL_SPEEED=3.500000e+00
;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
/NEGATEY=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Right Virtual Foot 2
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Left Virtual Foot 2
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
/NEGATEY=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Pelvic Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RPV
/REFERENCE_SEGMENT=LAB
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Left Pelvic Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RPV
/REFERENCE_SEGMENT=LAB
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
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/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Right Foot Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Right Virtual Foot 2
/REFERENCE_SEGMENT=LAB
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Foot Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Left Virtual Foot 2
/REFERENCE_SEGMENT=LAB
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Trunk Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTA
! /REFERENCE_SEGMENT=LAB
/RESOLUTION_COORDINATE_SYSTEM=
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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! /TREADMILL_SPEEED=0.0
;

Compute_Model_Based_Data
/RESULT_NAME=Right Shoulder Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RAR
/REFERENCE_SEGMENT=RTA
/RESOLUTION_COORDINATE_SYSTEM=
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Shoulder Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=LAR
/REFERENCE_SEGMENT=RTA
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
/NEGATEY=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Elbow Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RFA
/REFERENCE_SEGMENT=RAR
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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! /TREADMILL_SPEED=0.0
;

Compute_Model_Based_Data
/RESULT_NAME=Left Elbow Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=LFA
/REFERENCE_SEGMENT=LAR
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Velocity
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=RTH
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Velocity
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=LTH
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/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Velocity
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Velocity
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Velocity
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RMF
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=RMF
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Velocity
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LMF
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=LMF
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/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=RGRF
/FUNCTION=GRF_DATA
/SEGMENT=RFT
/REFERENCE_SEGMENT=
! /RESOLUTION_COORDINATE_SYSTEM=LAB
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=NORMALIZE_TO_LOCAL_METRIC
/NORMALIZATION_METRIC=MASS
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/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=LGRF
/FUNCTION=GRF_DATA
/SEGMENT=LFT
/REFERENCE_SEGMENT=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=NORMALIZE_TO_LOCAL_METRIC
/NORMALIZATION_METRIC=MASS
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=RPV
/USE_CARDAN_SEQUENCE=TRUE
/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
/NEGATEY=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=RPV
/USE_CARDAN_SEQUENCE=TRUE
/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=RTH
/USE_CARDAN_SEQUENCE=TRUE
/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
/NEGATEY=TRUE
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=LTH
/USE_CARDAN_SEQUENCE=TRUE
/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=RFT
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=RSK
/USE_CARDAN_SEQUENCE=TRUE
/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Moment
/FUNCTION=JOINT_MOMENT
/SEGMENT=LFT
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=LSK
/USE_CARDAN_SEQUENCE=TRUE
/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEZ=TRUE
/AXIS1=Z
/AXIS2=X
/AXIS3=Y
;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Power
/FUNCTION=JOINT_POWER_SCALAR
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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! /AXIS1=X
! /AXIS2=Y
! /AXIS3=Z
;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Power
/FUNCTION=JOINT_POWER_SCALAR
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Power
/FUNCTION=JOINT_POWER_SCALAR
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Power
/FUNCTION=JOINT_POWER_SCALAR
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Power
/FUNCTION=JOINT_POWER_SCALAR
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Power
/FUNCTION=JOINT_POWER_SCALAR
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=COM disp
/FUNCTION=MODEL_COG
/SEGMENT=
/REFERENCE_SEGMENT=
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;

!! VERTICAL LOADING RATE
First_Derivative
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=RGRF
/RESULT_TYPES=DERIVED
! /RESULT_FOLDERS=PROCESSED
/RESULT_NAME=rightLR
/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
;

First_Derivative
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=LGRF
/RESULT_TYPES=DERIVED
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/RESULT_NAME=leftLR
/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
;

Evaluate_Expression
/EXPRESSION=RESOLVE_DISCONTINUITY(LINK_MODEL_BASED::ORIGINAL::Trunk Angle,360,EVENT_LABEL::ORIGINAL::TAKEAWAY)
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=Trunk Angle
/RESULT_TYPES=LINK_MODEL_BASED
/RESULT_FOLDERS=PROCESSED
/RESULT_NAME=Trunk Angle
! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
;

Evaluate_Expression
/EXPRESSION=RESOLVE_DISCONTINUITY(LINK_MODEL_BASED::ORIGINAL::Right Shoulder Angle,360,EVENT_LABEL::ORIGINAL::TAKEAWAY)
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=Right Shoulder Angle
/RESULT_TYPES=LINK_MODEL_BASED
/RESULT_FOLDERS=PROCESSED
/RESULT_NAME=Right Shoulder Angle
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;

Evaluate_Expression
/EXPRESSION=RESOLVE_DISCONTINUITY(LINK_MODEL_BASED::ORIGINAL::Left Shoulder Angle,360,EVENT_LABEL::ORIGINAL::TAKEAWAY)
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=Left Shoulder Angle
/RESULT_TYPES=LINK_MODEL_BASED
/RESULT_FOLDERS=PROCESSED
/RESULT_NAME=Left Shoulder Angle
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;

Subtract_Constant_From_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Trunk Angle
/SIGNAL_COMPONENTS=Z
/RESULT_TYPES=LINK_MODEL_BASED
/RESULT_FOLDERS=PROCESSED
/RESULT_NAME=Trunk Angle
/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
/CONSTANT=-180
;

Subtract_Constant_From_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Right Shoulder Angle
/SIGNAL_COMPONENTS=Z
/RESULT_TYPES=LINK_MODEL_BASED
/RESULT_FOLDERS=PROCESSED
/RESULT_NAME=Right Shoulder Angle
/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
/CONSTANT=-180
;

Subtract_Constant_From_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Left Shoulder Angle
/SIGNAL_COMPONENTS=Z
/RESULT_TYPES=LINK_MODEL_BASED
/RESULT_FOLDERS=PROCESSED
/RESULT_NAME=Left Shoulder Angle
/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
/CONSTANT=180
;

Subtract_Signals
/SIGNAL_TYPES=TARGET
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=LWM+L.GTR
/COMPONENT_SEQUENCE=ALL
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/RESULT_NAME=LWrist
;

Subtract_Signals
/SIGNAL_TYPES=TARGET
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=RWM+R.GTR
/COMPONENT_SEQUENCE=ALL
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/RESULT_NAME=RWrist
;

For_Each
/ITERATION_PARAMETER_NAME=INDEX
/ITEMS=::FILES
;

Select_Active_File
/FILE_NAME=*&::INDEX
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;

! gait cycle

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=COM disp
/FILE_NAME=::FOLDER&::INDEX&_COM_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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! /USE_POINT_RATE=FALSE
/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_SHORT_FILENAME=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Pelvic Angle
/FILE_NAME=::FOLDER&::INDEX&_RpelvisAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Hip Angle
/FILE_NAME=::FOLDER&::INDEX&_RhipAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Knee Angle
/FILE_NAME=::FOLDER&::INDEX&_RkneeAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Ankle Angle
/FILE_NAME=::FOLDER&::INDEX&_RankleAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Foot Angle
/FILE_NAME=::FOLDER&::INDEX&_RfootAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Pelvic Angle
/FILE_NAME=::FOLDER&::INDEX&_LpelvisAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Hip Angle
/FILE_NAME=::FOLDER&::INDEX&_LhipAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Knee Angle
/FILE_NAME=::FOLDER&::INDEX&_LkneeAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Ankle Angle
/FILE_NAME=::FOLDER&::INDEX&_LankleAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Foot Angle
/FILE_NAME=::FOLDER&::INDEX&_LfootAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Trunk Angle
/FILE_NAME=::FOLDER&::INDEX&_TrunkAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
! /NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Right Shoulder Angle
/FILE_NAME=::FOLDER&::INDEX&_RshoulderAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Left Shoulder Angle
/FILE_NAME=::FOLDER&::INDEX&_LshoulderAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Elbow Angle
/FILE_NAME=::FOLDER&::INDEX&_RelbowAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=Left Elbow Angle
/FILE_NAME=::FOLDER&::INDEX&_LelbowAng_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Hip Moment
/FILE_NAME=::FOLDER&::INDEX&_RhipMom_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Hip Moment
/FILE_NAME=::FOLDER&::INDEX&_LhipMom_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Knee Moment
/FILE_NAME=::FOLDER&::INDEX&_RkneeMom_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Knee Moment
/FILE_NAME=::FOLDER&::INDEX&_LkneeMom_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Ankle Moment
/FILE_NAME=::FOLDER&::INDEX&_RankleMom_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Ankle Moment
/FILE_NAME=::FOLDER&::INDEX&_LankleMom_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Hip Power
/FILE_NAME=::FOLDER&::INDEX&_RhipPow_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Hip Power
/FILE_NAME=::FOLDER&::INDEX&_LhipPow_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Knee Power
/FILE_NAME=::FOLDER&::INDEX&_RkneePow_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Knee Power
/FILE_NAME=::FOLDER&::INDEX&_LkneePow_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Ankle Power
/FILE_NAME=::FOLDER&::INDEX&_RanklePow_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Ankle Power
/FILE_NAME=::FOLDER&::INDEX&_LanklePow_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=RGRF
/FILE_NAME=::FOLDER&::INDEX&_Rgrf_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=LGRF
/FILE_NAME=::FOLDER&::INDEX&_Lgrf_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=TARGET
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=C7
/FILE_NAME=::FOLDER&::INDEX&_C7_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=RWrist
/FILE_NAME=::FOLDER&::INDEX&_RWM_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=RHS+RTO+RHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=LWrist
/FILE_NAME=::FOLDER&::INDEX&_LWM_cycle.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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/EVENT_SEQUENCE=LHS+LTO+LHS
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/NORMALIZE_DATA=TRUE
/NORMALIZE_POINTS=101
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;

! All frames

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=COM disp
/FILE_NAME=::FOLDER&::INDEX&_COM.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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! /NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Pelvic Angle
/FILE_NAME=::FOLDER&::INDEX&_RpelvisAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Hip Angle
/FILE_NAME=::FOLDER&::INDEX&_RhipAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Knee Angle
/FILE_NAME=::FOLDER&::INDEX&_RkneeAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Ankle Angle
/FILE_NAME=::FOLDER&::INDEX&_RankleAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Foot Angle
/FILE_NAME=::FOLDER&::INDEX&_RfootAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Pelvic Angle
/FILE_NAME=::FOLDER&::INDEX&_LpelvisAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Hip Angle
/FILE_NAME=::FOLDER&::INDEX&_LhipAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Knee Angle
/FILE_NAME=::FOLDER&::INDEX&_LkneeAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Ankle Angle
/FILE_NAME=::FOLDER&::INDEX&_LankleAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Foot Angle
/FILE_NAME=::FOLDER&::INDEX&_LfootAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Trunk Angle
/FILE_NAME=::FOLDER&::INDEX&_TrunkAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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! /NORMALIZE_DATA=FALSE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Right Shoulder Angle
/FILE_NAME=::FOLDER&::INDEX&_RshoulderAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Left Shoulder Angle
/FILE_NAME=::FOLDER&::INDEX&_LshoulderAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Elbow Angle
/FILE_NAME=::FOLDER&::INDEX&_RelbowAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=Left Elbow Angle
/FILE_NAME=::FOLDER&::INDEX&_LelbowAng.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Hip Moment
/FILE_NAME=::FOLDER&::INDEX&_RhipMom.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Hip Moment
/FILE_NAME=::FOLDER&::INDEX&_LhipMom.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Knee Moment
/FILE_NAME=::FOLDER&::INDEX&_RkneeMom.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Knee Moment
/FILE_NAME=::FOLDER&::INDEX&_LkneeMom.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Ankle Moment
/FILE_NAME=::FOLDER&::INDEX&_RankleMom.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Ankle Moment
/FILE_NAME=::FOLDER&::INDEX&_LankleMom.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Hip Power
/FILE_NAME=::FOLDER&::INDEX&_RhipPow.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Hip Power
/FILE_NAME=::FOLDER&::INDEX&_LhipPow.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Knee Power
/FILE_NAME=::FOLDER&::INDEX&_RkneePow.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Knee Power
/FILE_NAME=::FOLDER&::INDEX&_LkneePow.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Ankle Power
/FILE_NAME=::FOLDER&::INDEX&_RanklePow.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Left Ankle Power
/FILE_NAME=::FOLDER&::INDEX&_LanklePow.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=RGRF
/FILE_NAME=::FOLDER&::INDEX&_Rgrf.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=LGRF
/FILE_NAME=::FOLDER&::INDEX&_Lgrf.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=TARGET
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=C7
/FILE_NAME=::FOLDER&::INDEX&_C7.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=RWrist
/FILE_NAME=::FOLDER&::INDEX&_RWM.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=LWrist
/FILE_NAME=::FOLDER&::INDEX&_LWM.txt
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

Metric_Compute_Temporal_Distance
/GLOBAL_RESULT_METRIC_FOLDER=TEMPORAL_DISTANCE_&::INDEX
/RHS_EVENT=RHS
/LHS_EVENT=LHS
/RTO_EVENT=RTO
/LTO_EVENT=LTO
/STRICT_EVENT_SEQUENCE_VALIDATION=TRUE
! /COMPUTE_SPEED=TRUE
! /COMPUTE_STATURES_PER_SECOND=TRUE
! /COMPUTE_STRIDE_WIDTH=TRUE
! /COMPUTE_STRIDE_LENGTH=TRUE
! /COMPUTE_CYCLE_TIME=TRUE
! /COMPUTE_STEP_LENGTH=TRUE
! /COMPUTE_STEP_TIME=TRUE
! /COMPUTE_STANCE_TIME=TRUE
! /COMPUTE_SWING_TIME=TRUE
! /COMPUTE_STEPS_PER_MINUTE=TRUE
! /COMPUTE_STRIDES_PER_MINUTE=TRUE
! /COMPUTE_DOUBLE_LIMB_SUPPORT_TIME=FALSE
! /COMPUTE_RIGHT_INITIAL_DOUBLE_LIMB_SUPPORT_TIME=FALSE
! /TREADMILL_SPEED=3.0
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! /TREADMILL_DIRECTION_X=1
! /TREADMILL_DIRECTION_Y=0
! /TREADMILL_DIRECTION_Z=0
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;

Select_Active_File
/FILE_NAME=GLOBAL
;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=METRIC
/SIGNAL_FOLDER=TEMPORAL_DISTANCE_&::INDEX
/SIGNAL_NAMES=Left_Stance_Time_Mean+Left_Swing_Time_Mean+Left_Step_Length_Mean+Left_Steps_Per_Minute_Mean+Left_Stride_Length_Mean+Left_Strides_Per_Minute_Mean+Right_Stance_Time_Mean+Right_Swing_Time_Mean+Right_Step_Length_Mean+Right_Steps_Per_Minute_Mean+Right_Stride_Length_Mean+Right_Strides_Per_Minute_Mean+Speed+Stride_Length_Mean+Stride_Width_Mean+Cycle_Time_Mean+Double_Limb_Support_Time_Ave+Right_Initial_Double_Limb_Support_Time_Mean+Right_Terminal_Double_Limb_Support_Time_Mean+Left_Initial_Double_Limb_Support_Time_Mean+Left_Terminal_Double_Limb_Support_Time_Mean
/FILE_NAME=::FOLDER&TEMPORAL_DISTANCE_&::INDEX&.txt
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/COMPONENT_SEQUENCE=ALL
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;

End_For_Each
/Iteration_Parameter_Name=INDEX
;

